PsychoPy2experiment version="3.0.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1440, 900]
  color = #000000
  colorSpace = hex
  expName = expressions_knowledge
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Routines
  Routine Instruction_knowledge
    TextComponent text_3
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Escoge pinchando con el ratón la traducción en inglés de cada expresión que escuchas en español. Hay más expresiones en inglés que en español.

        Primero vas a ver las expresiones en inglés, cuando estés listo/a, pulsa la barra espaciadora (space).

        Pulsa la barra espaciadora para continuar.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent Bye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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      text:
        Este es el final del tercer y último test.

        ¡Muchas gracias por participar!
  Routine audio
    SoundComponent tracks
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
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    TextComponent rpA
      letterHeight = 0.08
      pos [set every repeat] = (-.65, .6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respA
      units = pix
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    TextComponent rpB
      letterHeight = 0.08
      pos [set every repeat] = (-.65, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respB
      units = pix
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    TextComponent rpC
      letterHeight = 0.08
      pos [set every repeat] = (-.65, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respC
      units = pix
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    TextComponent rpD
      letterHeight = 0.08
      pos [set every repeat] = (-.65, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respD
      units = pix
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    TextComponent rpE
      letterHeight = 0.08
      pos [set every repeat] = (0, .6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respE
      units = pix
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    TextComponent rpF
      letterHeight = 0.08
      pos [set every repeat] = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respF
      units = pix
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    TextComponent rpG
      letterHeight = 0.08
      pos [set every repeat] = (0, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respG
      units = pix
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    TextComponent rpH
      letterHeight = 0.08
      pos [set every repeat] = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respH
      units = pix
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    TextComponent rpJ
      letterHeight = 0.08
      pos [set every repeat] = (.65, .6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respJ
      units = pix
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    TextComponent rpK
      letterHeight = 0.08
      pos [set every repeat] = (.65, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respK
      units = pix
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    TextComponent rpL
      letterHeight = 0.08
      pos [set every repeat] = (.65, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respL
      units = pix
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    TextComponent rpM
      letterHeight = 0.08
      pos [set every repeat] = (.65, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $respM
      units = pix
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    PolygonComponent regA
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (-.65, 0.6)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regB
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (-.65, .2)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regC
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (-.65, -.2)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regD
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (-.65, -.6)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regE
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (0, .6)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regF
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (0, 0.2)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regG
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (0, -0.2)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regH
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (0, -0.6)
      shape = rectangle
      size [set every repeat] = (0.5, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regJ
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (.65, 0.6)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regK
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (.65, 0.2)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regL
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (.65, -0.2)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent regM
      fillColor = $[1,1,1]
      opacity [set every repeat] = 0
      pos [set every repeat] = (.65, -0.6)
      shape = rectangle
      size [set every repeat] = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = regA,regB,regC,regD,regE,regF,regG,regH,regJ,regK,regL,regM
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine memory
    TextComponent text_4
      letterHeight = 0.1
      pos [set every repeat] = (-.65, 0)
      startVal [time (s)] = 0.0
      units = pix
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      text [set every repeat]:
        in cold blood



        tooth and nail



        behind the scenes



        from the rooftops
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = pix
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      text [set every repeat]:
        for anything in the world



        night and day



        by the sweat of his brow



        at the end of the day
    TextComponent text_6
      letterHeight = 0.1
      pos [set every repeat] = (.65, 0)
      startVal [time (s)] = 0.0
      units = pix
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      text [set every repeat]:
        by any means



        within arm's reach



        to the letter



        off one's own bat
    TextComponent text_7
      letterHeight = 0.04
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      text = Pulsa 'space' cuando estés listo/a para empezar
      units = pix
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    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instruction_knowledge
  Routine memory
  LoopInitiator Matching loopType="TrialHandler"
    conditionsFile = task_3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('audio', 'mundo.wav'), ('respA', 'in cold blood'), ('respB', 'tooth and nail'), ('respC', 'behind the scenes'), ('respD', 'from the rooftops'), ('respE', 'for anything in the world'), ('respF', 'night and day'), ('respG', 'by any means'), ('respH', 'to the letter'), ('respJ', 'by the sweat of his brow'), ('respK', "within arm's reach"), ('respL', 'at the end of the day'), ('respM', "off one's own bat"), ('correct', 'for anything in the world')]),
      OrderedDict([('audio', 'letra.wav'), ('respA', 'in cold blood'), ('respB', 'tooth and nail'), ('respC', 'behind the scenes'), ('respD', 'from the rooftops'), ('respE', 'for anything in the world'), ('respF', 'night and day'), ('respG', 'by any means'), ('respH', 'to the letter'), ('respJ', 'by the sweat of his brow'), ('respK', "within arm's reach"), ('respL', 'at the end of the day'), ('respM', "off one's own bat"), ('correct', 'to the letter')]),
      OrderedDict([('audio', 'unnas.wav'), ('respA', 'in cold blood'), ('respB', 'tooth and nail'), ('respC', 'behind the scenes'), ('respD', 'from the rooftops'), ('respE', 'for anything in the world'), ('respF', 'night and day'), ('respG', 'by any means'), ('respH', 'to the letter'), ('respJ', 'by the sweat of his brow'), ('respK', "within arm's reach"), ('respL', 'at the end of the day'), ('respM', "off one's own bat"), ('correct', 'tooth and nail')]),
      OrderedDict([('audio', 'sudor.wav'), ('respA', 'in cold blood'), ('respB', 'tooth and nail'), ('respC', 'behind the scenes'), ('respD', 'from the rooftops'), ('respE', 'for anything in the world'), ('respF', 'night and day'), ('respG', 'by any means'), ('respH', 'to the letter'), ('respJ', 'by the sweat of his brow'), ('respK', "within arm's reach"), ('respL', 'at the end of the day'), ('respM', "off one's own bat"), ('correct', 'by the sweat of his brow')])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
    Routine audio
  LoopTerminator Matching
  Routine Thanks
